 namespace _Method { #include "Agilent Gen5 Interface\\Agilent Gen5 Interface.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
variable o_CytationID;
variable arr_str_platetypes[];
variable int_readstatus;
variable int_gradient;
variable int_setpoint;
variable str_SaveFilePath;
variable str_ProtocolPath;
variable str_PlateBarcode;
variable int_devicestatus;
variable int_CurrentTemp;
variable int_TempStatus;
variable loopCounter1;
variable str_SaveFilePathName;
variable str_SaveFilePathNameFULL;
variable str_SaveFilePathNameXPT;
variable int_ErrorIndex;
variable int_ErrorCode;
variable str_ConnectionStatus;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    arr_str_platetypes.SetSize(1);
    TRACELEVEL::SetTraceLevel(2);
    str_ProtocolPath = Translate("C:\Users\Public\Documents\Protocols\6pw_test.prt");
    str_PlateBarcode = Translate("IM001234");
    str_SaveFilePath = Translate("C:\Users\Public\Documents\Experiments\\");
    str_SaveFilePathName = (str_SaveFilePath + str_PlateBarcode);
    str_SaveFilePathNameXPT = Translate(".xpt");
    str_SaveFilePathNameFULL = (str_SaveFilePathName + str_SaveFilePathNameXPT);
    TRACELEVEL::Debug_Trace2(str_SaveFilePathNameFULL, Translate(""));
    TRACELEVEL::Debug_Trace2(Translate("<<<<<<Cytation Connecting>>>>>>"), Translate(""));
    str_ConnectionStatus = Agilent_Gen5_Interface::Connect(Agilent_Gen5_Interface::ReaderType::Cytation5, ASWGLOBAL::BOOL::TRUE, Translate("2504170C"), 3, 9600, ASWGLOBAL::BOOL::FALSE, o_CytationID);
    if (str_ConnectionStatus == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::Debug_Trace2(Translate("<<<<<<Cytation Connection FAILED>>>>>>"), Translate(""));
      abort;
    }
    else
    {
      TRACELEVEL::Debug_Trace2(Translate("<<<<<<Cytation CONNECTED>>>>>>"), Translate(""));
    }
    Agilent_Gen5_Interface::SetTemperatureSetPoint(o_CytationID, ASWGLOBAL::BOOL::TRUE, 37, 0);
    if(0){
      Agilent_Gen5_Interface::GetPlateTypeNames(o_CytationID, 6, arr_str_platetypes);
    }
    TRACELEVEL::Debug_Trace2(Translate("<<<<DEVICE STATUS>>>>"), int_devicestatus);
    Agilent_Gen5_Interface::GetDeviceStatus(o_CytationID, int_devicestatus);
    TRACELEVEL::Debug_Trace2(Translate("<<<<CARRIER OUT>>>>"), Translate(""));
    Agilent_Gen5_Interface::CarrierOut(o_CytationID);
    TRACELEVEL::Debug_Trace2(Translate("<<<<CARRIER IN>>>>"), Translate(""));
    Agilent_Gen5_Interface::CarrierInWithPlate(o_CytationID, Translate("6 WELL PLATE"), ASWGLOBAL::BOOL::TRUE);
    if(0){
      Agilent_Gen5_Interface::CarrierIn(o_CytationID);
    }
    TRACELEVEL::Debug_Trace2(Translate("<<<<NEW EXPT OPENED>>>>"), Translate(""));
    Agilent_Gen5_Interface::NewExperiment(o_CytationID, str_ProtocolPath, 0);
    TRACELEVEL::Debug_Trace4(Translate("<<<PLATE INFO PASSED>>"), str_PlateBarcode, Translate(""), Translate(""));
    Agilent_Gen5_Interface::SetPlateInfo(o_CytationID, str_PlateBarcode, str_PlateBarcode);
    TRACELEVEL::Debug_Trace2(Translate("<<<<<CURRENT TEMP>>>>>"), int_CurrentTemp);
    Agilent_Gen5_Interface::GetCurrentTemperature(o_CytationID, int_CurrentTemp, int_TempStatus);
    if(0){
      Agilent_Gen5_Interface::GetTemperatureSetPoint(o_CytationID, int_setpoint, int_gradient);
    }
    TRACELEVEL::Debug_Trace2(Translate("<<<<START READ>>>>"), Translate(""));
    Agilent_Gen5_Interface::StartReadPlate(o_CytationID);
    if(0){
      Agilent_Gen5_Interface::StartSimulatedReadPlate(o_CytationID);
    }
    TRACELEVEL::Debug_Trace2(Translate("<<<<READ IN PROGRESS>>>>"), int_readstatus);
    Agilent_Gen5_Interface::GetReadStatus(o_CytationID, int_readstatus);
    if(0){
      Agilent_Gen5_Interface::GetReaderError(o_CytationID, int_ErrorIndex, int_ErrorCode);
    }
    {
      loopCounter1 = 0;
      while (int_readstatus == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Debug_Trace2(Translate("<<<<READ STILL IN PROGRESS>>>>"), int_readstatus);
        Agilent_Gen5_Interface::GetReadStatus(o_CytationID, int_readstatus);
        if (int_readstatus == 5)
        {
          TRACELEVEL::Debug_Trace2(Translate("<<<<READ COMPLETE>>>>"), int_readstatus);
          break;
        }
        else
        {
          if (int_readstatus == 4|| int_readstatus == 3|| int_readstatus == 2)
          {
            break;
            TRACELEVEL::Debug_Trace2(Translate("<<<<READ PAUSED ERROR ISSUE>>>>"), int_readstatus);
            MECC::TraceComment(Translate("issuee??\n"));
          }
        }
      }
    }
    if (int_readstatus == 5)
    {
      TRACELEVEL::Debug_Trace2(Translate("<<<<READ IS COMPLETE>>>>"), int_readstatus);
      TRACELEVEL::Debug_Trace2(Translate("<<<<SAVING EXPERIMENT>>>>"), str_SaveFilePathNameFULL);
      Agilent_Gen5_Interface::SaveExperimentAs(o_CytationID, str_SaveFilePathNameFULL);
      TRACELEVEL::Debug_Trace2(Translate("<<<<CARRIER OUT TO REMOVE PLATE>>>>"), Translate(""));
      Agilent_Gen5_Interface::CarrierOut(o_CytationID);
      TRACELEVEL::Debug_Trace2(Translate("<<<<DISCONNECTING FROM CYTATION>>>"), str_SaveFilePathNameFULL);
      Agilent_Gen5_Interface::Disconnect(o_CytationID);
    }
  } }
