 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "Agilent Gen5 Interface\\Agilent Gen5 Interface.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "Hamilton DriverTools\\Hamilton DriverTools.hsl" }
variable _strMethodName;
variable _arrIntDeviceIDs[];
variable _experimentInitialized;
variable _plateInitialized;
variable arrIntReaderTypes[];
variable intSelectedReader;
variable intSelectedPort;
variable intSelectedBaudRate;
variable arrIntPortNumbers[];
variable arrStrPortNames[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable blnSuccess;
    private variable blnSimulationMode;
    private variable intDialogReturn;
    private dialog customDialog_1;
    private variable blnGoOnEnabled;
    private variable intSelectedIndex;
    private variable strDialogTitle;
    private variable loopCounter1;
    private variable intTraceLevel;
    private variable loopCounter4;
    private variable strFilePath;
    private variable intDeviceID;
    private variable arrStrPlateTypeNames[];
    private dialog customDialog_2;
    private dialog customDialog_3;
    private dialog customDialog_4;
    private dialog customDialog_5;
    private dialog customDialog_6;
    private dialog customDialog_7;
    private dialog customDialog_8;
    private dialog customDialog_9;
    private dialog customDialog_10;
    private dialog customDialog_11;
    private dialog customDialog_12;
    private dialog customDialog_13;
    private dialog customDialog_14;
    private dialog customDialog_15;
    private dialog customDialog_16;
    private dialog customDialog_17;
    private dialog customDialog_18;
    private dialog customDialog_19;
    private dialog customDialog_20;
    private dialog customDialog_21;
    private dialog customDialog_22;
    private dialog customDialog_23;
    private dialog customDialog_24;
    private dialog customDialog_25;
    private dialog customDialog_26;
    private dialog customDialog_27;
    private dialog customDialog_28;
    private dialog customDialog_29;
    private dialog customDialog_30;
    private dialog customDialog_31;
    private dialog customDialog_32;
    private dialog customDialog_33;
    private dialog customDialog_34;
    private dialog customDialog_35;
    private dialog customDialog_36;
    private dialog customDialog_37;
    private dialog customDialog_38;
    private dialog customDialog_39;
    private dialog customDialog_40;
    private dialog customDialog_41;
    private dialog customDialog_42;
    private dialog customDialog_43;
    private dialog customDialog_44;
    private dialog customDialog_45;
    private dialog customDialog_46;
    private dialog customDialog_47;
    private dialog customDialog_48;
    private dialog customDialog_49;
    private dialog customDialog_50;
    private dialog customDialog_51;
    private dialog customDialog_52;
    private dialog customDialog_53;
    private dialog customDialog_54;
    private dialog customDialog_55;
    private dialog customDialog_56;
    private dialog customDialog_57;
    private dialog customDialog_58;
    private dialog customDialog_59;
    private dialog customDialog_60;
    private dialog customDialog_61;
    private dialog customDialog_62;
    private variable strWellReferenceXML;
    private variable intNumberOfROIs;
    private variable blnSetProcedure;
    private variable blnGetDataSetResults;
    private variable blnCarrierIn;
    private variable strDataSetResults;
    private variable intErrorIndex;
    private variable blnStartSimulatedReadPlate;
    private variable blnPrintReport;
    private variable blnGetPlateLayout;
    private variable blnFileOperations;
    private variable blnAddAuditTrailRecord;
    private variable strPlateDefinition;
    private variable intBaudRate;
    private variable blnExportPlateData;
    private variable blnAddPlate;
    private variable strProtocolDefinition;
    private variable strDescription;
    private variable intErrorCode;
    private variable blnGetExportBuilderNames;
    private variable strSerialNumber;
    private variable strPlateId;
    private variable blnUseDataSetNameFromList;
    private variable blnStartReadFromFile;
    private variable blnSaveExperiment;
    private variable blnResumeReadPlate;
    private variable blnLidOnPlate;
    private variable ErrorCode;
    private variable strSampleDescription;
    private variable strExportFilePath;
    private variable intRetrieveRawDataStatus;
    private variable blnRunReaderControlCommand;
    private variable blnNewExperiment;
    private variable blnGetDataSetROIsInWell;
    private variable blnGetDataSetNames;
    private variable strSampleIdentification;
    private variable blnOpenExperiment;
    private variable blnGetDeviceStatus;
    private variable blnGetDataSetInfo;
    private variable blnDeletePlate;
    private variable strPlateLayout;
    private variable strComment;
    private variable intRunReaderControlCommand;
    private variable intPlateIndex;
    private variable blnUseExportNamesFromList;
    private variable blnSetTemperatureSetPoint;
    private variable blnSetSampleIdentification;
    private variable blnIncubatorState;
    private variable blnGetPlateTypeNames;
    private variable blnGetPictureExportNames;
    private variable blnGetMovieExportNames;
    private variable blnDisplayImagingLiveModeDialog;
    private variable intTemperatureSetPoint;
    private variable intComPort;
    private variable blnExperimentOperations;
    private variable blnCarrierOperations;
    private variable blnAutoExecuteOnly;
    private variable intProtocolDefinitionType;
    private variable blnPlateOperations;
    private variable strPictureExportName;
    private variable intDeviceStatus;
    private variable blnGetSampleIdentification;
    private variable blnGetRawDataSetInfo;
    private variable blnGetRawData;
    private variable blnGetPlateTypeDefinition;
    private variable blnExportPicture;
    private variable blnCarrierOut;
    private variable strProcedure;
    private variable strDataSetName;
    private variable intExportType;
    private variable blnSetSampleDescription;
    private variable blnSetPlateLayout;
    private variable blnReaderErrorOperations;
    private variable ReaderError;
    private variable strProtocolId;
    private variable strMovieExportName;
    private variable strDataSetInfo;
    private variable loopCounter2;
    private variable fltCurrentTemperature;
    private variable blnResumeSimulatedReadPlate;
    private variable blnImportSampleIDs;
    private variable blnGetImageFolderPaths;
    private variable blnCarrierInWithPlate;
    private variable strResultIndexes;
    private variable strExportInformation;
    private variable intPlateTypeSelection;
    private variable intExportTypeIndex;
    private variable blnUseBuilderNameFromList;
    private variable blnTemperatureOperations;
    private variable blnStartReadPlate;
    private variable blnShowPrintDialog;
    private variable blnGetSampleDescription;
    private variable blnGetReportBuilderNames;
    private variable blnGetReadStatus;
    private variable blnGetCurrentTemperature;
    private variable blnConnectUsingUSB;
    private variable intReadStatus;
    private variable blnMiscellaneousOperations;
    private variable strListSeparator;
    private variable strErrorMessage;
    private variable strBuilderName;
    private variable intTemperatureStatus;
    private variable blnSelectPlate;
    private variable blnAbortReadPlate;
    private variable ErrorMessage;
    private variable strPlateBarcode;
    private variable strExperimentPathName;
    private variable intGradient;
    private variable blnSaveAs;
    private variable blnSave;
    private variable blnGetTemperatureSetPoint;
    private variable blnExportMovie;
    private variable blnCloseExperiment;
    private variable arrStrDataSetNames[];
    private variable arrIntSpectrumSteps[];
    private variable arrIntVerticalReads[];
    private variable arrStrImageFolderPaths[];
    private variable arrIntDecimalPlaces[];
    private variable arrIntDisplayMilliseconds[];
    private variable arrIntSpectrumStarts[];
    private variable arrIntHorizontalReads[];
    private variable arrFltReadValues[];
    private variable arrIntVerticalIndex[];
    private variable arrIntSecondaryStatus[];
    private variable arrIntPrimaryStatus[];
    private variable arrIntKineticReads[];
    private variable arrIntColumns[];
    private variable arrStrBuilderNames[];
    private variable arrIntWavelengthIndex[];
    private variable arrIntHorizontalIndex[];
    private variable arrStrPictureExportNames[];
    private variable arrStrMovieExportNames[];
    private variable arrIntRows[];
    private variable arrIntKineticIntervalMilliseconds[];
    private variable arrIntSpectrumWavelengths[];
    private variable arrIntKineticIndex[];
    ::RegisterAbortHandler( "OnAbort");
    _strMethodName = GetMethodFileName();
    blnGoOnEnabled = ASWGLOBAL::BOOL::FALSE;
    strDialogTitle = "Agilent Gen5 Interface";
    _experimentInitialized = ASWGLOBAL::BOOL::FALSE;
    _plateInitialized = ASWGLOBAL::BOOL::FALSE;
    ErrorCode = 1;
    ErrorMessage = 2;
    ReaderError = 3;
    arrIntReaderTypes.SetSize(0);
    arrStrImageFolderPaths.SetSize(0);
    arrStrPictureExportNames.SetSize(0);
    arrStrMovieExportNames.SetSize(0);
    arrIntReaderTypes.SetSize(0);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Plug_n_Play);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::ELx800);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::ELx808);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_HT);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::FLx800);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Powerwave);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Clarity_OLE);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy2);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::PowerWaveXS_2);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_Mx);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Epoch);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_H4);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_H1);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Eon);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_Neo);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Cytation3);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_HTX);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Cytation5);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Epoch_2);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_Neo2);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Lionheart_FX);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::BioTek_800TS);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Cytation1);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Synergy_LX);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Lionheart_LX);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Cytation7);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::LogPhase_600);
    arrIntReaderTypes.AddAsLast(Agilent_Gen5_Interface::ReaderType::Cytation_C10);
    arrStrPlateTypeNames.SetSize(0);
    arrStrBuilderNames.SetSize(0);
    arrStrDataSetNames.SetSize(0);
    arrIntDecimalPlaces.SetSize(0);
    arrIntKineticReads.SetSize(0);
    arrIntKineticIntervalMilliseconds.SetSize(0);
    arrIntDisplayMilliseconds.SetSize(0);
    arrIntSpectrumWavelengths.SetSize(0);
    arrIntSpectrumStarts.SetSize(0);
    arrIntSpectrumSteps.SetSize(0);
    arrIntHorizontalReads.SetSize(0);
    arrIntVerticalReads.SetSize(0);
    arrIntRows.SetSize(0);
    arrIntColumns.SetSize(0);
    arrIntKineticIndex.SetSize(0);
    arrIntWavelengthIndex.SetSize(0);
    arrIntHorizontalIndex.SetSize(0);
    arrIntVerticalIndex.SetSize(0);
    arrIntPrimaryStatus.SetSize(0);
    arrFltReadValues.SetSize(0);
    Hamilton_DriverTools::GetAvailablePortNames("Initialize", _strMethodName, arrStrPortNames);
    Hamilton_DriverTools::GetAvailablePortNumbers("Initialize", _strMethodName, arrIntPortNumbers);
    {
      loopCounter1 = 0;
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_35.InitCustomDialog("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");
        customDialog_35.SetCustomDialogArrayProperty( "serialPort.ItemsSource", arrStrPortNames );
        customDialog_35.SetCustomDialogProperty( "Title", strDialogTitle );
        customDialog_35.SetCustomDialogProperty( "btnCustomDialogGoOn.IsEnabled", blnGoOnEnabled );
        customDialog_35.ShowCustomDialog();
        intDialogReturn = customDialog_35.GetCustomDialogProperty( "ReturnValue" );
        intTraceLevel = customDialog_35.GetCustomDialogProperty( "numeric1.Value" );
        strSerialNumber = customDialog_35.GetCustomDialogProperty( "textBox1.Text" );
        blnSimulationMode = customDialog_35.GetCustomDialogProperty( "checkBox1.IsChecked" );
        intTraceLevel = customDialog_35.GetCustomDialogProperty( "numeric3.Value" );
        blnConnectUsingUSB = customDialog_35.GetCustomDialogProperty( "radioButton1.IsChecked" );
        intSelectedReader = customDialog_35.GetCustomDialogProperty( "readerType.SelectedIndex" );
        intSelectedPort = customDialog_35.GetCustomDialogProperty( "serialPort.SelectedIndex" );
        intSelectedBaudRate = customDialog_35.GetCustomDialogProperty( "serialSpeed.SelectedIndex" );
        _HandleDialogReturn(intDialogReturn, "Connect");
        if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
        {
          blnSuccess = Agilent_Gen5_Interface::Connect(arrIntReaderTypes.ElementAt( intSelectedReader -1), blnConnectUsingUSB, strSerialNumber, intComPort, intBaudRate, blnSimulationMode, intDeviceID);
          _HandleFunctionSuccess(blnSuccess, "Connect");
          blnSuccess = Agilent_Gen5_Interface::SetTraceLevel(intDeviceID, intTraceLevel);
          _HandleFunctionSuccess(blnSuccess, "SetTraceLevel");
        }
        if (intDialogReturn == ASWGLOBAL::DIALOG::IGNORE)
        {
          break;
        }
        _arrIntDeviceIDs.AddAsLast(intDeviceID);
        blnGoOnEnabled = ASWGLOBAL::BOOL::TRUE;
      }
    }
    {
      loopCounter4 = 0;
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        loopCounter4 = loopCounter4 + 1;
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _arrIntDeviceIDs );
        customDialog_1.SetCustomDialogProperty( "Title", strDialogTitle );
        customDialog_1.SetCustomDialogProperty( "btnCustomDialogGoOn.IsEnabled", blnGoOnEnabled );
        customDialog_1.ShowCustomDialog();
        intDialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        intSelectedIndex = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        blnCarrierOperations = customDialog_1.GetCustomDialogProperty( "radioButton1.IsChecked" );
        blnExperimentOperations = customDialog_1.GetCustomDialogProperty( "radioButton2.IsChecked" );
        blnPlateOperations = customDialog_1.GetCustomDialogProperty( "radioButton3.IsChecked" );
        blnFileOperations = customDialog_1.GetCustomDialogProperty( "radioButton4.IsChecked" );
        blnTemperatureOperations = customDialog_1.GetCustomDialogProperty( "radioButton5.IsChecked" );
        blnMiscellaneousOperations = customDialog_1.GetCustomDialogProperty( "radioButton6.IsChecked" );
        blnReaderErrorOperations = customDialog_1.GetCustomDialogProperty( "radioButton7.IsChecked" );
        _HandleDialogReturn(intDialogReturn, Translate("Select Task"));
        if (intDialogReturn == ASWGLOBAL::DIALOG::IGNORE)
        {
          break;
        }
        intDeviceID = _arrIntDeviceIDs.ElementAt( intSelectedIndex -1);
        if (blnCarrierOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_59.InitCustomDialog("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");
          customDialog_59.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrPlateTypeNames );
          customDialog_59.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_59.ShowCustomDialog();
          intDialogReturn = customDialog_59.GetCustomDialogProperty( "ReturnValue" );
          blnLidOnPlate = customDialog_59.GetCustomDialogProperty( "checkBox1.IsChecked" );
          blnCarrierOut = customDialog_59.GetCustomDialogProperty( "radioButton2.IsChecked" );
          intSelectedIndex = customDialog_59.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
          blnCarrierIn = customDialog_59.GetCustomDialogProperty( "radioButton1.IsChecked" );
          blnCarrierInWithPlate = customDialog_59.GetCustomDialogProperty( "radioButton3.IsChecked" );
          _HandleDialogReturn(intDialogReturn, "Carrier Operations");
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            if (blnCarrierOut == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::CarrierOut(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, ":CarrierOut");
            }
            if (blnCarrierIn == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::CarrierIn(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "CarrierIn");
            }
            if (blnCarrierInWithPlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::CarrierInWithPlate(intDeviceID, arrStrPlateTypeNames.ElementAt( intSelectedIndex -1), blnLidOnPlate);
              _HandleFunctionSuccess(blnSuccess, "CarrierInWithPlate");
            }
          }
        }
        if (blnExperimentOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_42.InitCustomDialog("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");
          customDialog_42.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_42.SetCustomDialogProperty( "radioButton3.IsEnabled", _experimentInitialized );
          customDialog_42.SetCustomDialogProperty( "radioButton4.IsEnabled", _experimentInitialized );
          customDialog_42.SetCustomDialogProperty( "radioButton5.IsEnabled", _experimentInitialized );
          customDialog_42.SetCustomDialogProperty( "radioButton6.IsEnabled", _experimentInitialized );
          customDialog_42.SetCustomDialogProperty( "radioButton7.IsEnabled", _experimentInitialized );
          customDialog_42.ShowCustomDialog();
          intDialogReturn = customDialog_42.GetCustomDialogProperty( "ReturnValue" );
          blnNewExperiment = customDialog_42.GetCustomDialogProperty( "radioButton2.IsChecked" );
          blnOpenExperiment = customDialog_42.GetCustomDialogProperty( "radioButton1.IsChecked" );
          blnCloseExperiment = customDialog_42.GetCustomDialogProperty( "radioButton3.IsChecked" );
          blnSaveExperiment = customDialog_42.GetCustomDialogProperty( "radioButton4.IsChecked" );
          blnGetSampleIdentification = customDialog_42.GetCustomDialogProperty( "radioButton5.IsChecked" );
          blnSetSampleIdentification = customDialog_42.GetCustomDialogProperty( "radioButton6.IsChecked" );
          blnAddAuditTrailRecord = customDialog_42.GetCustomDialogProperty( "radioButton7.IsChecked" );
          _HandleDialogReturn(intDialogReturn, "Experiment Operations");
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            if (blnNewExperiment == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_12.InitCustomDialog("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");
              customDialog_12.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_12.ShowCustomDialog();
              intDialogReturn = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
              strProtocolDefinition = customDialog_12.GetCustomDialogProperty( "textBox1.Text" );
              strProtocolDefinition = customDialog_12.GetCustomDialogProperty( "path1.Path" );
              intProtocolDefinitionType = customDialog_12.GetCustomDialogProperty( "numeric1.Value" );
              _HandleDialogReturn(intDialogReturn, "New Experiment");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::NewExperiment(intDeviceID, strProtocolDefinition, intProtocolDefinitionType);
                _HandleFunctionSuccess(blnSuccess, "NewExperiment");
                _experimentInitialized = ASWGLOBAL::BOOL::TRUE;
              }
            }
            if (blnOpenExperiment == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_46.InitCustomDialog("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");
              customDialog_46.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_46.ShowCustomDialog();
              intDialogReturn = customDialog_46.GetCustomDialogProperty( "ReturnValue" );
              strExperimentPathName = customDialog_46.GetCustomDialogProperty( "path1.Path" );
              _HandleDialogReturn(intDialogReturn, "New Experiment");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::OpenExperiment(intDeviceID, strExperimentPathName);
                _HandleFunctionSuccess(blnSuccess, "OpenExperiment");
                _experimentInitialized = ASWGLOBAL::BOOL::TRUE;
              }
            }
            if (blnCloseExperiment == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::CloseExperiment(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "CloseExperiment");
              _experimentInitialized = ASWGLOBAL::BOOL::FALSE;
              _plateInitialized = ASWGLOBAL::BOOL::FALSE;
            }
            if (blnSaveExperiment == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_17.InitCustomDialog("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");
              customDialog_17.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_17.ShowCustomDialog();
              intDialogReturn = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
              strFilePath = customDialog_17.GetCustomDialogProperty( "path1.Path" );
              blnSave = customDialog_17.GetCustomDialogProperty( "radioButton1.IsChecked" );
              blnSaveAs = customDialog_17.GetCustomDialogProperty( "radioButton2.IsChecked" );
              _HandleDialogReturn(intDialogReturn, "Save Experiment");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                if (blnSave == ASWGLOBAL::BOOL::TRUE)
                {
                  blnSuccess = Agilent_Gen5_Interface::SaveExperiment(intDeviceID);
                  _HandleFunctionSuccess(blnSuccess, "SaveExperiment");
                }
                if (blnSaveAs == ASWGLOBAL::BOOL::TRUE)
                {
                  blnSuccess = Agilent_Gen5_Interface::SaveExperimentAs(intDeviceID, strFilePath);
                  _HandleFunctionSuccess(blnSuccess, "SaveExperimentAs");
                }
              }
            }
            if (blnGetSampleIdentification == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::GetSampleIdentification(intDeviceID, strSampleIdentification);
              _HandleFunctionSuccess(blnSuccess, "GetSampleIdentification");
              customDialog_11.InitCustomDialog("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");
              customDialog_11.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_11.SetCustomDialogProperty( "textBlock3.Text", strSampleIdentification );
              customDialog_11.ShowCustomDialog();
              intDialogReturn = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Sample Identification");
            }
            if (blnSetSampleIdentification == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_29.InitCustomDialog("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");
              customDialog_29.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_29.ShowCustomDialog();
              intDialogReturn = customDialog_29.GetCustomDialogProperty( "ReturnValue" );
              strSampleIdentification = customDialog_29.GetCustomDialogProperty( "textBox1.Text" );
              _HandleDialogReturn(intDialogReturn, "Set Sample Identification");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::SetSampleIdentification(intDeviceID, strSampleIdentification);
                _HandleFunctionSuccess(blnSuccess, "SetSampleIdentification");
              }
            }
            if (blnAddAuditTrailRecord == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_33.InitCustomDialog("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");
              customDialog_33.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_33.ShowCustomDialog();
              intDialogReturn = customDialog_33.GetCustomDialogProperty( "ReturnValue" );
              strDescription = customDialog_33.GetCustomDialogProperty( "textBox1.Text" );
              strComment = customDialog_33.GetCustomDialogProperty( "textBox2.Text" );
              _HandleDialogReturn(intDialogReturn, "Set Sample Identification");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::AddAuditTrailRecord(intDeviceID, strDescription, strComment);
                _HandleFunctionSuccess(blnSuccess, "AddAuditTrailRecord");
              }
            }
          }
        }
        if (blnPlateOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_37.InitCustomDialog("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");
          customDialog_37.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_37.SetCustomDialogProperty( "radioButton3.IsEnabled", _experimentInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton4.IsEnabled", _experimentInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton5.IsEnabled", _experimentInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton6.IsEnabled", _experimentInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton7.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton8.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton9.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton10.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton11.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton12.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton13.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton14.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton15.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton16.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton17.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton18.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton19.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton20.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton21.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton22.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton23.IsEnabled", _plateInitialized );
          customDialog_37.SetCustomDialogProperty( "radioButton24.IsEnabled", _plateInitialized );
          customDialog_37.ShowCustomDialog();
          intDialogReturn = customDialog_37.GetCustomDialogProperty( "ReturnValue" );
          blnGetPlateTypeNames = customDialog_37.GetCustomDialogProperty( "radioButton2.IsChecked" );
          blnGetPlateTypeDefinition = customDialog_37.GetCustomDialogProperty( "radioButton1.IsChecked" );
          blnGetPlateLayout = customDialog_37.GetCustomDialogProperty( "radioButton3.IsChecked" );
          blnSetPlateLayout = customDialog_37.GetCustomDialogProperty( "radioButton4.IsChecked" );
          blnAddPlate = customDialog_37.GetCustomDialogProperty( "radioButton5.IsChecked" );
          blnSelectPlate = customDialog_37.GetCustomDialogProperty( "radioButton6.IsChecked" );
          blnStartReadPlate = customDialog_37.GetCustomDialogProperty( "radioButton7.IsChecked" );
          blnStartSimulatedReadPlate = customDialog_37.GetCustomDialogProperty( "radioButton8.IsChecked" );
          blnStartReadFromFile = customDialog_37.GetCustomDialogProperty( "radioButton9.IsChecked" );
          blnResumeReadPlate = customDialog_37.GetCustomDialogProperty( "radioButton10.IsChecked" );
          blnResumeSimulatedReadPlate = customDialog_37.GetCustomDialogProperty( "radioButton11.IsChecked" );
          blnAbortReadPlate = customDialog_37.GetCustomDialogProperty( "radioButton12.IsChecked" );
          blnSetProcedure = customDialog_37.GetCustomDialogProperty( "radioButton13.IsChecked" );
          blnDeletePlate = customDialog_37.GetCustomDialogProperty( "radioButton14.IsChecked" );
          blnImportSampleIDs = customDialog_37.GetCustomDialogProperty( "radioButton15.IsChecked" );
          blnGetRawDataSetInfo = customDialog_37.GetCustomDialogProperty( "radioButton16.IsChecked" );
          blnGetRawData = customDialog_37.GetCustomDialogProperty( "radioButton17.IsChecked" );
          blnGetSampleDescription = customDialog_37.GetCustomDialogProperty( "radioButton18.IsChecked" );
          blnSetSampleDescription = customDialog_37.GetCustomDialogProperty( "radioButton19.IsChecked" );
          blnGetDataSetNames = customDialog_37.GetCustomDialogProperty( "radioButton20.IsChecked" );
          blnGetDataSetInfo = customDialog_37.GetCustomDialogProperty( "radioButton21.IsChecked" );
          blnGetDataSetResults = customDialog_37.GetCustomDialogProperty( "radioButton22.IsChecked" );
          blnGetDataSetROIsInWell = customDialog_37.GetCustomDialogProperty( "radioButton23.IsChecked" );
          blnGetReadStatus = customDialog_37.GetCustomDialogProperty( "radioButton24.IsChecked" );
          _HandleDialogReturn(intDialogReturn, "Plate Operations");
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            if (blnGetPlateTypeNames == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::GetPlateTypeNames(intDeviceID, intPlateTypeSelection, arrStrPlateTypeNames);
              _HandleFunctionSuccess(blnSuccess, "GetPlateTypeNames");
              customDialog_47.InitCustomDialog("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");
              customDialog_47.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrPlateTypeNames );
              customDialog_47.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_47.ShowCustomDialog();
              intDialogReturn = customDialog_47.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Plate Type Names");
            }
            if (blnGetPlateTypeDefinition == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_50.InitCustomDialog("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");
              customDialog_50.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrPlateTypeNames );
              customDialog_50.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_50.ShowCustomDialog();
              intDialogReturn = customDialog_50.GetCustomDialogProperty( "ReturnValue" );
              intSelectedIndex = customDialog_50.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
              _HandleDialogReturn(intDialogReturn, "Get Plate Type Definition");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::GetPlateTypeDefinition(intDeviceID, arrStrPlateTypeNames.ElementAt( intSelectedIndex -1), strPlateDefinition);
                _HandleFunctionSuccess(blnSuccess, "GetPlateTypeDefinition");
                customDialog_49.InitCustomDialog("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");
                customDialog_49.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_49.SetCustomDialogProperty( "textBlock3.Text", strPlateDefinition );
                customDialog_49.ShowCustomDialog();
                intDialogReturn = customDialog_49.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Plate Definition");
              }
            }
            if (blnGetPlateLayout == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_44.InitCustomDialog("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");
              customDialog_44.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_44.ShowCustomDialog();
              intDialogReturn = customDialog_44.GetCustomDialogProperty( "ReturnValue" );
              strProtocolId = customDialog_44.GetCustomDialogProperty( "textBox1.Text" );
              _HandleDialogReturn(intDialogReturn, "Get Plate Layout");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::GetPlateLayout(intDeviceID, strProtocolId, strPlateLayout);
                _HandleFunctionSuccess(blnSuccess, "GetPlateLayout");
                customDialog_53.InitCustomDialog("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");
                customDialog_53.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_53.SetCustomDialogProperty( "textBlock3.Text", strPlateLayout );
                customDialog_53.ShowCustomDialog();
                intDialogReturn = customDialog_53.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Get Plate Layout");
              }
            }
            if (blnSetPlateLayout == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_45.InitCustomDialog("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");
              customDialog_45.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_45.ShowCustomDialog();
              intDialogReturn = customDialog_45.GetCustomDialogProperty( "ReturnValue" );
              strPlateLayout = customDialog_45.GetCustomDialogProperty( "textBox1.Text" );
              _HandleDialogReturn(intDialogReturn, "Get Plate Layout");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::SetPlateLayout(intDeviceID, strPlateLayout);
                _HandleFunctionSuccess(blnSuccess, "SetPlateLayout");
              }
            }
            if (blnAddPlate == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_21.InitCustomDialog("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");
              customDialog_21.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_21.ShowCustomDialog();
              intDialogReturn = customDialog_21.GetCustomDialogProperty( "ReturnValue" );
              strPlateId = customDialog_21.GetCustomDialogProperty( "textBox1.Text" );
              strPlateBarcode = customDialog_21.GetCustomDialogProperty( "textBox2.Text" );
              _HandleDialogReturn(intDialogReturn, "Add Plate");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::AddPlate(intDeviceID, strPlateId, strPlateBarcode);
                _HandleFunctionSuccess(blnSuccess, "AddPlate");
                _plateInitialized = ASWGLOBAL::BOOL::TRUE;
              }
            }
            if (blnSelectPlate == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_40.InitCustomDialog("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");
              customDialog_40.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_40.ShowCustomDialog();
              intDialogReturn = customDialog_40.GetCustomDialogProperty( "ReturnValue" );
              intPlateIndex = customDialog_40.GetCustomDialogProperty( "numeric1.Value" );
              _HandleDialogReturn(intDialogReturn, "Add Plate");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::SelectPlate(intDeviceID, intPlateIndex);
                _HandleFunctionSuccess(blnSuccess, "SelectPlate");
                _plateInitialized = ASWGLOBAL::BOOL::TRUE;
              }
            }
            if (blnDeletePlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::DeletePlate(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "DeletePlate");
              _plateInitialized = ASWGLOBAL::BOOL::FALSE;
            }
            if (blnStartReadPlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::StartReadPlate(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "StartReadPlate");
            }
            if (blnStartSimulatedReadPlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::StartSimulatedReadPlate(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "StartSimulatedReadPlate");
            }
            if (blnStartReadFromFile == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_6.InitCustomDialog("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");
              customDialog_6.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_6.ShowCustomDialog();
              intDialogReturn = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
              strListSeparator = customDialog_6.GetCustomDialogProperty( "textBox1.Text" );
              strFilePath = customDialog_6.GetCustomDialogProperty( "path1.Path" );
              _HandleDialogReturn(intDialogReturn, "Add Plate");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::StartReadFromFile(intDeviceID, strFilePath, strListSeparator);
                _HandleFunctionSuccess(blnSuccess, "StartReadFromFile");
              }
            }
            if (blnResumeReadPlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::ResumeReadPlate(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "ResumeReadPlate");
            }
            if (blnResumeSimulatedReadPlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::ResumeSimulatedReadPlate(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "ResumeSimulatedReadPlate");
            }
            if (blnAbortReadPlate == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::AbortReadPlate(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "AbortReadPlate");
            }
            if (blnGetReadStatus == ASWGLOBAL::BOOL::TRUE)
            {
              {
                loopCounter2 = 0;
                while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
                {
                  loopCounter2 = loopCounter2 + 1;
                  blnSuccess = Agilent_Gen5_Interface::GetReadStatus(intDeviceID, intReadStatus);
                  _HandleFunctionSuccess(blnSuccess, "GetReadStatus");
                  customDialog_15.InitCustomDialog("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");
                  customDialog_15.SetCustomDialogProperty( "Title", strDialogTitle );
                  customDialog_15.SetCustomDialogProperty( "textBlock3.Text", intReadStatus );
                  customDialog_15.ShowCustomDialog();
                  intDialogReturn = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
                  _HandleDialogReturn(intDialogReturn, "Get Read Status");
                  if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
                  {
                    break;
                  }
                }
              }
            }
            if (blnSetProcedure == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_41.InitCustomDialog("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");
              customDialog_41.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_41.ShowCustomDialog();
              intDialogReturn = customDialog_41.GetCustomDialogProperty( "ReturnValue" );
              strProcedure = customDialog_41.GetCustomDialogProperty( "textBox1.Text" );
              _HandleDialogReturn(intDialogReturn, "Set Procedure");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSetProcedure = Agilent_Gen5_Interface::SetProcedure(intDeviceID, strProcedure);
                _HandleFunctionSuccess(blnSuccess, "SetProcedure");
              }
            }
            if (blnImportSampleIDs == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_5.InitCustomDialog("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");
              customDialog_5.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_5.ShowCustomDialog();
              intDialogReturn = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
              strFilePath = customDialog_5.GetCustomDialogProperty( "path1.Path" );
              _HandleDialogReturn(intDialogReturn, "Import Sample IDs");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::ImportSampleIDs(intDeviceID, strFilePath);
                _HandleFunctionSuccess(blnSuccess, "ImportSampleIDs");
              }
            }
            if (blnGetRawDataSetInfo == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::GetRawDataSetInfo(intDeviceID, arrStrDataSetNames, arrIntDecimalPlaces, arrIntKineticReads, arrIntKineticIntervalMilliseconds, arrIntDisplayMilliseconds, arrIntSpectrumWavelengths, arrIntSpectrumStarts, arrIntSpectrumSteps, arrIntHorizontalReads, arrIntVerticalReads);
              _HandleFunctionSuccess(blnSuccess, "GetRawDataSetInfo");
              customDialog_7.InitCustomDialog("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");
              customDialog_7.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrDataSetNames );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrIntDecimalPlaces );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox3.ItemsSource", arrIntKineticReads );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox4.ItemsSource", arrIntKineticIntervalMilliseconds );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox5.ItemsSource", arrIntDisplayMilliseconds );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox6.ItemsSource", arrIntSpectrumWavelengths );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox7.ItemsSource", arrIntSpectrumStarts );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox8.ItemsSource", arrIntSpectrumSteps );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox9.ItemsSource", arrIntHorizontalReads );
              customDialog_7.SetCustomDialogArrayProperty( "comboBox10.ItemsSource", arrIntVerticalReads );
              customDialog_7.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_7.ShowCustomDialog();
              intDialogReturn = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Raw Data Set Info");
            }
            if (blnGetRawData == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_61.InitCustomDialog("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");
              customDialog_61.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrDataSetNames );
              customDialog_61.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_61.ShowCustomDialog();
              intDialogReturn = customDialog_61.GetCustomDialogProperty( "ReturnValue" );
              strDataSetName = customDialog_61.GetCustomDialogProperty( "textBox1.Text" );
              intSelectedIndex = customDialog_61.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
              blnUseDataSetNameFromList = customDialog_61.GetCustomDialogProperty( "checkBox1.IsChecked" );
              _HandleDialogReturn(intDialogReturn, "Get Raw Data");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                if (blnUseDataSetNameFromList == ASWGLOBAL::BOOL::TRUE)
                {
                  blnSuccess = Agilent_Gen5_Interface::GetRawData(intDeviceID, strDataSetName, intRetrieveRawDataStatus, arrIntRows, arrIntColumns, arrIntKineticIndex, arrIntWavelengthIndex, arrIntHorizontalIndex, arrIntVerticalIndex, arrIntPrimaryStatus, arrIntSecondaryStatus, arrFltReadValues);
                  _HandleFunctionSuccess(blnSuccess, "GetRawData");
                }
                else
                {
                  blnSuccess = Agilent_Gen5_Interface::GetRawData(intDeviceID, arrStrDataSetNames.ElementAt( intSelectedIndex -1), intRetrieveRawDataStatus, arrIntRows, arrIntColumns, arrIntKineticIndex, arrIntWavelengthIndex, arrIntHorizontalIndex, arrIntVerticalIndex, arrIntPrimaryStatus, arrIntSecondaryStatus, arrFltReadValues);
                  _HandleFunctionSuccess(blnSuccess, "GetRawData");
                }
                customDialog_58.InitCustomDialog("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");
                customDialog_58.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrIntRows );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrIntColumns );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox3.ItemsSource", arrIntKineticIndex );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox4.ItemsSource", arrIntWavelengthIndex );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox5.ItemsSource", arrIntHorizontalIndex );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox6.ItemsSource", arrIntVerticalIndex );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox7.ItemsSource", arrIntPrimaryStatus );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox8.ItemsSource", arrIntSecondaryStatus );
                customDialog_58.SetCustomDialogArrayProperty( "comboBox9.ItemsSource", arrFltReadValues );
                customDialog_58.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_58.SetCustomDialogProperty( "textBlock13.Text", intRetrieveRawDataStatus );
                customDialog_58.ShowCustomDialog();
                intDialogReturn = customDialog_58.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Get Raw Data");
              }
            }
            if (blnGetSampleDescription == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::GetSampleDescription(intDeviceID, strSampleDescription);
              _HandleFunctionSuccess(blnSuccess, "GetSampleDescription");
              customDialog_39.InitCustomDialog("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");
              customDialog_39.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_39.SetCustomDialogProperty( "textBlock3.Text", strSampleDescription );
              customDialog_39.ShowCustomDialog();
              intDialogReturn = customDialog_39.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Sample Description");
            }
            if (blnSetSampleDescription == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_54.InitCustomDialog("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");
              customDialog_54.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_54.ShowCustomDialog();
              intDialogReturn = customDialog_54.GetCustomDialogProperty( "ReturnValue" );
              strSampleDescription = customDialog_54.GetCustomDialogProperty( "textBox1.Text" );
              _HandleDialogReturn(intDialogReturn, "Set Sample Description");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::SetSampleDescription(intDeviceID, strSampleDescription);
                _HandleFunctionSuccess(blnSuccess, "SetSampleDescription");
              }
            }
            if (blnGetDataSetNames == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_48.InitCustomDialog("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");
              customDialog_48.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_48.ShowCustomDialog();
              intDialogReturn = customDialog_48.GetCustomDialogProperty( "ReturnValue" );
              strProtocolId = customDialog_48.GetCustomDialogProperty( "textBox1.Text" );
              _HandleDialogReturn(intDialogReturn, "Get Data Set Names");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::GetDataSetNames(intDeviceID, strProtocolId, arrStrDataSetNames);
                _HandleFunctionSuccess(blnSuccess, "GetDataSetNames");
                customDialog_20.InitCustomDialog("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");
                customDialog_20.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrDataSetNames );
                customDialog_20.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_20.ShowCustomDialog();
                intDialogReturn = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Get Data Set Names");
              }
            }
            if (blnGetDataSetInfo == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_25.InitCustomDialog("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");
              customDialog_25.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrDataSetNames );
              customDialog_25.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_25.ShowCustomDialog();
              intDialogReturn = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
              strDataSetName = customDialog_25.GetCustomDialogProperty( "textBox1.Text" );
              intSelectedIndex = customDialog_25.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
              blnUseDataSetNameFromList = customDialog_25.GetCustomDialogProperty( "checkBox1.IsChecked" );
              strProtocolId = customDialog_25.GetCustomDialogProperty( "textBox2.Text" );
              _HandleDialogReturn(intDialogReturn, "Get Data Set Info");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                if (blnUseDataSetNameFromList == ASWGLOBAL::BOOL::TRUE)
                {
                  blnSuccess = Agilent_Gen5_Interface::GetDataSetInfo(intDeviceID, strProtocolId, arrStrDataSetNames.ElementAt( intSelectedIndex -1), strDataSetInfo);
                  _HandleFunctionSuccess(blnSuccess, "GetDataSetInfo");
                }
                else
                {
                  blnSuccess = Agilent_Gen5_Interface::GetDataSetInfo(intDeviceID, strProtocolId, strDataSetName, strDataSetInfo);
                  _HandleFunctionSuccess(blnSuccess, "GetDataSetInfo");
                }
                customDialog_18.InitCustomDialog("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");
                customDialog_18.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_18.SetCustomDialogProperty( "textBlock3.Text", strDataSetInfo );
                customDialog_18.ShowCustomDialog();
                intDialogReturn = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Get Data Set Info");
              }
            }
            if (blnGetDataSetResults == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_27.InitCustomDialog("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");
              customDialog_27.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrDataSetNames );
              customDialog_27.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_27.ShowCustomDialog();
              intDialogReturn = customDialog_27.GetCustomDialogProperty( "ReturnValue" );
              strDataSetName = customDialog_27.GetCustomDialogProperty( "textBox1.Text" );
              intSelectedIndex = customDialog_27.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
              blnUseDataSetNameFromList = customDialog_27.GetCustomDialogProperty( "checkBox1.IsChecked" );
              strProtocolId = customDialog_27.GetCustomDialogProperty( "textBox2.Text" );
              strResultIndexes = customDialog_27.GetCustomDialogProperty( "textBox3.Text" );
              _HandleDialogReturn(intDialogReturn, "Get Data Set Results");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                if (blnUseDataSetNameFromList == ASWGLOBAL::BOOL::TRUE)
                {
                  blnSuccess = Agilent_Gen5_Interface::GetDataSetResults(intDeviceID, strProtocolId, arrStrDataSetNames.ElementAt( intSelectedIndex -1), strResultIndexes, strDataSetResults);
                  _HandleFunctionSuccess(blnSuccess, "GetDataSetResults");
                }
                else
                {
                  blnSuccess = Agilent_Gen5_Interface::GetDataSetResults(intDeviceID, strProtocolId, strDataSetName, strResultIndexes, strDataSetResults);
                  _HandleFunctionSuccess(blnSuccess, "GetDataSetResults");
                }
                customDialog_16.InitCustomDialog("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");
                customDialog_16.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_16.SetCustomDialogProperty( "textBlock3.Text", strDataSetResults );
                customDialog_16.ShowCustomDialog();
                intDialogReturn = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Get Data Set Results");
              }
            }
            if (blnGetDataSetROIsInWell == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_43.InitCustomDialog("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");
              customDialog_43.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrDataSetNames );
              customDialog_43.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_43.ShowCustomDialog();
              intDialogReturn = customDialog_43.GetCustomDialogProperty( "ReturnValue" );
              strDataSetName = customDialog_43.GetCustomDialogProperty( "textBox1.Text" );
              intSelectedIndex = customDialog_43.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
              blnUseDataSetNameFromList = customDialog_43.GetCustomDialogProperty( "checkBox1.IsChecked" );
              strProtocolId = customDialog_43.GetCustomDialogProperty( "textBox2.Text" );
              strWellReferenceXML = customDialog_43.GetCustomDialogProperty( "textBox3.Text" );
              _HandleDialogReturn(intDialogReturn, "Get Data Set ROIs In Well");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                if (blnUseDataSetNameFromList == ASWGLOBAL::BOOL::TRUE)
                {
                  blnSuccess = Agilent_Gen5_Interface::GetDataSetROIsInWell(intDeviceID, strProtocolId, arrStrDataSetNames.ElementAt( intSelectedIndex -1), strWellReferenceXML, intNumberOfROIs);
                  _HandleFunctionSuccess(blnSuccess, "GetDataSetROIsInWell");
                }
                else
                {
                  blnSuccess = Agilent_Gen5_Interface::GetDataSetROIsInWell(intDeviceID, strProtocolId, strDataSetName, strWellReferenceXML, intNumberOfROIs);
                  _HandleFunctionSuccess(blnSuccess, "GetDataSetROIsInWell");
                }
                customDialog_38.InitCustomDialog("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");
                customDialog_38.SetCustomDialogProperty( "Title", strDialogTitle );
                customDialog_38.ShowCustomDialog();
                intDialogReturn = customDialog_38.GetCustomDialogProperty( "ReturnValue" );
                _HandleDialogReturn(intDialogReturn, "Get Data Set ROIs In Well");
              }
            }
          }
        }
        if (blnFileOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_31.InitCustomDialog("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");
          customDialog_31.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_31.SetCustomDialogProperty( "radioButton2.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton1.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton3.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton4.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton5.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton6.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton7.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton8.IsEnabled", _plateInitialized );
          customDialog_31.SetCustomDialogProperty( "radioButton9.IsEnabled", _plateInitialized );
          customDialog_31.ShowCustomDialog();
          intDialogReturn = customDialog_31.GetCustomDialogProperty( "ReturnValue" );
          blnExportPlateData = customDialog_31.GetCustomDialogProperty( "radioButton2.IsChecked" );
          blnGetExportBuilderNames = customDialog_31.GetCustomDialogProperty( "radioButton1.IsChecked" );
          blnPrintReport = customDialog_31.GetCustomDialogProperty( "radioButton3.IsChecked" );
          blnGetReportBuilderNames = customDialog_31.GetCustomDialogProperty( "radioButton4.IsChecked" );
          blnGetImageFolderPaths = customDialog_31.GetCustomDialogProperty( "radioButton5.IsChecked" );
          blnGetPictureExportNames = customDialog_31.GetCustomDialogProperty( "radioButton6.IsChecked" );
          blnExportPicture = customDialog_31.GetCustomDialogProperty( "radioButton7.IsChecked" );
          blnGetMovieExportNames = customDialog_31.GetCustomDialogProperty( "radioButton8.IsChecked" );
          blnExportMovie = customDialog_31.GetCustomDialogProperty( "radioButton9.IsChecked" );
          _HandleDialogReturn(intDialogReturn, "Experiment Operations");
          if (blnExportPlateData == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_60.InitCustomDialog("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");
            customDialog_60.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrStrBuilderNames );
            customDialog_60.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_60.ShowCustomDialog();
            intDialogReturn = customDialog_60.GetCustomDialogProperty( "ReturnValue" );
            strBuilderName = customDialog_60.GetCustomDialogProperty( "textBox1.Text" );
            intExportTypeIndex = customDialog_60.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            blnUseBuilderNameFromList = customDialog_60.GetCustomDialogProperty( "checkBox1.IsChecked" );
            intSelectedIndex = customDialog_60.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
            _HandleDialogReturn(intDialogReturn, "Export Plate Data");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              intExportType = intExportTypeIndex - 1;
              if (blnUseBuilderNameFromList == ASWGLOBAL::BOOL::TRUE)
              {
                blnSuccess = Agilent_Gen5_Interface::ExportPlateData(intDeviceID, intExportType, strExportFilePath, arrStrBuilderNames.ElementAt( intSelectedIndex -1));
                _HandleFunctionSuccess(blnSuccess, "ExportPlateData");
              }
              else
              {
                blnSuccess = Agilent_Gen5_Interface::ExportPlateData(intDeviceID, intExportType, strExportFilePath, strBuilderName);
                _HandleFunctionSuccess(blnSuccess, "ExportPlateData");
              }
            }
          }
          if (blnGetExportBuilderNames == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_52.InitCustomDialog("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");
            customDialog_52.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_52.ShowCustomDialog();
            intDialogReturn = customDialog_52.GetCustomDialogProperty( "ReturnValue" );
            blnAutoExecuteOnly = customDialog_52.GetCustomDialogProperty( "checkBox1.IsChecked" );
            intExportTypeIndex = customDialog_52.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            _HandleDialogReturn(intDialogReturn, "Get Export Builder Names");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              blnSuccess = Agilent_Gen5_Interface::GetExportBuilderNames(intDeviceID, intExportType, blnAutoExecuteOnly, arrStrBuilderNames);
              _HandleFunctionSuccess(blnSuccess, "GetExportBuilderNames");
              customDialog_8.InitCustomDialog("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");
              customDialog_8.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrBuilderNames );
              customDialog_8.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_8.ShowCustomDialog();
              intDialogReturn = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Export Builder Names");
            }
          }
          if (blnPrintReport == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_3.InitCustomDialog("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");
            customDialog_3.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrStrBuilderNames );
            customDialog_3.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_3.ShowCustomDialog();
            intDialogReturn = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
            strBuilderName = customDialog_3.GetCustomDialogProperty( "textBox1.Text" );
            blnUseBuilderNameFromList = customDialog_3.GetCustomDialogProperty( "checkBox1.IsChecked" );
            intSelectedIndex = customDialog_3.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
            blnShowPrintDialog = customDialog_3.GetCustomDialogProperty( "checkBox2.IsChecked" );
            _HandleDialogReturn(intDialogReturn, "Print Report");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              if (blnUseBuilderNameFromList == ASWGLOBAL::BOOL::TRUE)
              {
                blnSuccess = Agilent_Gen5_Interface::PrintReport(intDeviceID, blnShowPrintDialog, arrStrBuilderNames.ElementAt( intSelectedIndex -1));
                _HandleFunctionSuccess(blnSuccess, "PrintReport");
              }
              else
              {
                blnSuccess = Agilent_Gen5_Interface::PrintReport(intDeviceID, blnShowPrintDialog, strBuilderName);
                _HandleFunctionSuccess(blnSuccess, "PrintReport");
              }
            }
          }
          if (blnGetReportBuilderNames == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_24.InitCustomDialog("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");
            customDialog_24.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_24.ShowCustomDialog();
            intDialogReturn = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
            blnAutoExecuteOnly = customDialog_24.GetCustomDialogProperty( "checkBox1.IsChecked" );
            _HandleDialogReturn(intDialogReturn, "Get Report Builder Names");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              blnSuccess = Agilent_Gen5_Interface::GetReportBuilderNames(intDeviceID, blnAutoExecuteOnly, arrStrBuilderNames);
              _HandleFunctionSuccess(blnSuccess, "GetReportBuilderNames");
              customDialog_28.InitCustomDialog("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");
              customDialog_28.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrBuilderNames );
              customDialog_28.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_28.ShowCustomDialog();
              intDialogReturn = customDialog_28.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Report Builder Names");
            }
          }
          if (blnGetImageFolderPaths == ASWGLOBAL::BOOL::TRUE)
          {
            blnSuccess = Agilent_Gen5_Interface::GetImageFolderPaths(intDeviceID, arrStrImageFolderPaths);
            _HandleFunctionSuccess(blnSuccess, "GetImageFolderPaths");
            customDialog_62.InitCustomDialog("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");
            customDialog_62.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrImageFolderPaths );
            customDialog_62.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_62.ShowCustomDialog();
            intDialogReturn = customDialog_62.GetCustomDialogProperty( "ReturnValue" );
            _HandleDialogReturn(intDialogReturn, "Get Image Folder Paths");
          }
          if (blnGetPictureExportNames == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_51.InitCustomDialog("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");
            customDialog_51.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_51.ShowCustomDialog();
            intDialogReturn = customDialog_51.GetCustomDialogProperty( "ReturnValue" );
            blnAutoExecuteOnly = customDialog_51.GetCustomDialogProperty( "checkBox1.IsChecked" );
            _HandleDialogReturn(intDialogReturn, "Get Picture Export Names");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              blnSuccess = Agilent_Gen5_Interface::GetPictureExportNames(intDeviceID, blnAutoExecuteOnly, arrStrPictureExportNames);
              _HandleFunctionSuccess(blnSuccess, "GetPictureExportNames");
              customDialog_55.InitCustomDialog("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");
              customDialog_55.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrPictureExportNames );
              customDialog_55.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_55.ShowCustomDialog();
              intDialogReturn = customDialog_55.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Picture Export Names");
            }
          }
          if (blnExportPicture == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_2.InitCustomDialog("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");
            customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrPictureExportNames );
            customDialog_2.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_2.ShowCustomDialog();
            intDialogReturn = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
            strPictureExportName = customDialog_2.GetCustomDialogProperty( "textBox1.Text" );
            intSelectedIndex = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            blnUseExportNamesFromList = customDialog_2.GetCustomDialogProperty( "checkBox1.IsChecked" );
            _HandleDialogReturn(intDialogReturn, "Export Picture");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              if (blnUseExportNamesFromList == ASWGLOBAL::BOOL::TRUE)
              {
                blnSuccess = Agilent_Gen5_Interface::ExportPicture(intDeviceID, arrStrPictureExportNames.ElementAt( intSelectedIndex -1), strExportInformation);
                _HandleFunctionSuccess(blnSuccess, "ExportPicture");
              }
              else
              {
                blnSuccess = Agilent_Gen5_Interface::ExportPicture(intDeviceID, strPictureExportName, strExportInformation);
                _HandleFunctionSuccess(blnSuccess, "ExportPicture");
              }
              customDialog_22.InitCustomDialog("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");
              customDialog_22.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_22.SetCustomDialogProperty( "textBlock3.Text", strExportInformation );
              customDialog_22.ShowCustomDialog();
              intDialogReturn = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Export Picture");
            }
          }
          if (blnGetMovieExportNames == ASWGLOBAL::BOOL::TRUE)
          {
            blnSuccess = Agilent_Gen5_Interface::GetMovieExportNames(intDeviceID, blnAutoExecuteOnly, arrStrMovieExportNames);
            _HandleFunctionSuccess(blnSuccess, "GetMovieExportNames");
            customDialog_19.InitCustomDialog("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");
            customDialog_19.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrMovieExportNames );
            customDialog_19.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_19.ShowCustomDialog();
            intDialogReturn = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
            _HandleDialogReturn(intDialogReturn, "Get Movie Export Names");
          }
          if (blnExportMovie == ASWGLOBAL::BOOL::TRUE)
          {
            customDialog_32.InitCustomDialog("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");
            customDialog_32.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrStrMovieExportNames );
            customDialog_32.SetCustomDialogProperty( "Title", strDialogTitle );
            customDialog_32.ShowCustomDialog();
            intDialogReturn = customDialog_32.GetCustomDialogProperty( "ReturnValue" );
            strMovieExportName = customDialog_32.GetCustomDialogProperty( "textBox1.Text" );
            intSelectedIndex = customDialog_32.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            blnUseExportNamesFromList = customDialog_32.GetCustomDialogProperty( "checkBox1.IsChecked" );
            _HandleDialogReturn(intDialogReturn, "Export Picture");
            if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
            {
              if (blnUseExportNamesFromList == ASWGLOBAL::BOOL::TRUE)
              {
                blnSuccess = Agilent_Gen5_Interface::ExportMovie(intDeviceID, arrStrMovieExportNames.ElementAt( intSelectedIndex -1), strExportInformation);
                _HandleFunctionSuccess(blnSuccess, "ExportMovie");
              }
              else
              {
                blnSuccess = Agilent_Gen5_Interface::ExportMovie(intDeviceID, strMovieExportName, strExportInformation);
                _HandleFunctionSuccess(blnSuccess, "ExportMovie");
              }
              customDialog_14.InitCustomDialog("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");
              customDialog_14.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_14.SetCustomDialogProperty( "textBlock3.Text", strExportInformation );
              customDialog_14.ShowCustomDialog();
              intDialogReturn = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Export Movie");
            }
          }
        }
        if (blnTemperatureOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_9.InitCustomDialog("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");
          customDialog_9.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_9.ShowCustomDialog();
          intDialogReturn = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
          blnGetCurrentTemperature = customDialog_9.GetCustomDialogProperty( "radioButton2.IsChecked" );
          blnGetTemperatureSetPoint = customDialog_9.GetCustomDialogProperty( "radioButton1.IsChecked" );
          blnSetTemperatureSetPoint = customDialog_9.GetCustomDialogProperty( "radioButton3.IsChecked" );
          _HandleDialogReturn(intDialogReturn, "Temperature Operations");
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            if (blnGetCurrentTemperature == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::GetCurrentTemperature(intDeviceID, fltCurrentTemperature, intTemperatureStatus);
              _HandleFunctionSuccess(blnSuccess, "GetCurrentTemperature");
              customDialog_13.InitCustomDialog("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");
              customDialog_13.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_13.SetCustomDialogProperty( "textBlock3.Text", fltCurrentTemperature );
              customDialog_13.SetCustomDialogProperty( "textBlock4.Text", intTemperatureStatus );
              customDialog_13.ShowCustomDialog();
              intDialogReturn = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Current Temperature");
            }
            if (blnGetTemperatureSetPoint == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::GetTemperatureSetPoint(intDeviceID, intTemperatureSetPoint, intGradient);
              _HandleFunctionSuccess(blnSuccess, "GetTemperatureSetPoint");
              customDialog_34.InitCustomDialog("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");
              customDialog_34.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_34.SetCustomDialogProperty( "textBlock5.Text", intTemperatureSetPoint );
              customDialog_34.SetCustomDialogProperty( "textBlock6.Text", intGradient );
              customDialog_34.ShowCustomDialog();
              intDialogReturn = customDialog_34.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Temperature Set Point");
            }
            if (blnSetTemperatureSetPoint == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_26.InitCustomDialog("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");
              customDialog_26.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_26.ShowCustomDialog();
              intDialogReturn = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
              blnIncubatorState = customDialog_26.GetCustomDialogProperty( "checkBox1.IsChecked" );
              intTemperatureSetPoint = customDialog_26.GetCustomDialogProperty( "numeric1.Value" );
              intGradient = customDialog_26.GetCustomDialogProperty( "numeric2.Value" );
              _HandleDialogReturn(intDialogReturn, "Set Temperature Set Point");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::SetTemperatureSetPoint(intDeviceID, blnIncubatorState, intTemperatureSetPoint, intGradient);
                _HandleFunctionSuccess(blnSuccess, "SetTemperatureSetPoint");
              }
            }
          }
        }
        if (blnMiscellaneousOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_36.InitCustomDialog("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");
          customDialog_36.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_36.ShowCustomDialog();
          intDialogReturn = customDialog_36.GetCustomDialogProperty( "ReturnValue" );
          blnRunReaderControlCommand = customDialog_36.GetCustomDialogProperty( "radioButton2.IsChecked" );
          blnDisplayImagingLiveModeDialog = customDialog_36.GetCustomDialogProperty( "radioButton1.IsChecked" );
          blnGetDeviceStatus = customDialog_36.GetCustomDialogProperty( "radioButton3.IsChecked" );
          _HandleDialogReturn(intDialogReturn, "Experiment Operations");
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            if (blnGetDeviceStatus == ASWGLOBAL::BOOL::TRUE)
            {
              {
                loopCounter2 = 0;
                while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
                {
                  loopCounter2 = loopCounter2 + 1;
                  blnSuccess = Agilent_Gen5_Interface::GetDeviceStatus(intDeviceID, intDeviceStatus);
                  _HandleFunctionSuccess(blnSuccess, "GetDeviceStatus");
                  customDialog_4.InitCustomDialog("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");
                  customDialog_4.SetCustomDialogProperty( "Title", strDialogTitle );
                  customDialog_4.SetCustomDialogProperty( "textBlock3.Text", intDeviceStatus );
                  customDialog_4.ShowCustomDialog();
                  intDialogReturn = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
                  _HandleDialogReturn(intDialogReturn, "Get Device Status");
                  if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
                  {
                    break;
                  }
                }
              }
            }
            if (blnRunReaderControlCommand == ASWGLOBAL::BOOL::TRUE)
            {
              customDialog_30.InitCustomDialog("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");
              customDialog_30.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_30.ShowCustomDialog();
              intDialogReturn = customDialog_30.GetCustomDialogProperty( "ReturnValue" );
              intRunReaderControlCommand = customDialog_30.GetCustomDialogProperty( "numeric1.Value" );
              _HandleDialogReturn(intDialogReturn, "Run Reader Control Command");
              if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
              {
                blnSuccess = Agilent_Gen5_Interface::RunReaderControlCommand(intDeviceID, intRunReaderControlCommand);
                _HandleFunctionSuccess(blnSuccess, "RunReaderControlCommand");
              }
            }
            if (blnDisplayImagingLiveModeDialog == ASWGLOBAL::BOOL::TRUE)
            {
              blnSuccess = Agilent_Gen5_Interface::DisplayImagingLiveModeDialog(intDeviceID);
              _HandleFunctionSuccess(blnSuccess, "DisplayImagingLiveModeDialog");
            }
          }
        }
        if (blnReaderErrorOperations == ASWGLOBAL::BOOL::TRUE)
        {
          customDialog_23.InitCustomDialog("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");
          customDialog_23.SetCustomDialogProperty( "Title", strDialogTitle );
          customDialog_23.ShowCustomDialog();
          intDialogReturn = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
          intSelectedIndex = customDialog_23.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
          intErrorIndex = customDialog_23.GetCustomDialogProperty( "numeric1.Value" );
          _HandleDialogReturn(intDialogReturn, "Reader Error Operations");
          if (intDialogReturn == ASWGLOBAL::DIALOG::OK)
          {
            if (intSelectedIndex == ErrorCode)
            {
              blnSuccess = Agilent_Gen5_Interface::GetErrorCode(intDeviceID, intErrorIndex, intErrorCode);
              _HandleFunctionSuccess(blnSuccess, "GetErrorCode");
              customDialog_57.InitCustomDialog("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");
              customDialog_57.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_57.SetCustomDialogProperty( "textBlock4.Text", intErrorCode );
              customDialog_57.ShowCustomDialog();
              intDialogReturn = customDialog_57.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Error Code");
            }
            if (intSelectedIndex == ErrorMessage)
            {
              blnSuccess = Agilent_Gen5_Interface::GetErrorMessage(intDeviceID, intErrorIndex, strErrorMessage);
              _HandleFunctionSuccess(blnSuccess, "GetErrorMessage");
              customDialog_10.InitCustomDialog("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");
              customDialog_10.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_10.SetCustomDialogProperty( "textBlock4.Text", strErrorMessage );
              customDialog_10.ShowCustomDialog();
              intDialogReturn = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Error Message");
            }
            if (intSelectedIndex == ReaderError)
            {
              blnSuccess = Agilent_Gen5_Interface::GetReaderError(intDeviceID, intErrorIndex, intErrorCode);
              _HandleFunctionSuccess(blnSuccess, "GetReaderError");
              customDialog_56.InitCustomDialog("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");
              customDialog_56.SetCustomDialogProperty( "Title", strDialogTitle );
              customDialog_56.SetCustomDialogProperty( "textBlock4.Text", intErrorCode );
              customDialog_56.ShowCustomDialog();
              intDialogReturn = customDialog_56.GetCustomDialogProperty( "ReturnValue" );
              _HandleDialogReturn(intDialogReturn, "Get Reader Error");
            }
          }
        }
      }
    }
    _Terminate();
  } }
