 namespace _Method { #include "Agilent Gen5 Interface\\Agilent Gen5 Interface.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
variable o_CytationID;
variable arr_str_platetypes[];
variable int_readstatus;
variable int_gradient;
variable int_setpoint;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    arr_str_platetypes.SetSize(0);
    Agilent_Gen5_Interface::Connect(Agilent_Gen5_Interface::ReaderType::Cytation5, ASWGLOBAL::BOOL::TRUE, Translate("2504170C"), 3, 9600, ASWGLOBAL::BOOL::FALSE, o_CytationID);
    if(0){
      Agilent_Gen5_Interface::GetPlateTypeNames(o_CytationID, 6, arr_str_platetypes);
    }
    Agilent_Gen5_Interface::CarrierOut(o_CytationID);
    Agilent_Gen5_Interface::CarrierInWithPlate(o_CytationID, Translate("6 WELL PLATE"), ASWGLOBAL::BOOL::FALSE);
    if(0){
      Agilent_Gen5_Interface::CarrierIn(o_CytationID);
    }
    Agilent_Gen5_Interface::GetTemperatureSetPoint(o_CytationID, int_setpoint, int_gradient);
    Agilent_Gen5_Interface::StartSimulatedReadPlate(o_CytationID);
    Agilent_Gen5_Interface::GetReadStatus(o_CytationID, int_readstatus);
    Agilent_Gen5_Interface::Disconnect(o_CytationID);
  } }
